Journal
Description: New Journal
Version VersionNumber=2.4
nb_div = 0
pixelsize = 0.162
nbPredictions = 0
Get INI String
  stIniPath = "\\isiserver\u934\service_imagerie\v_kapoor\FinalONEATTraining\ONEAT_fly_test\live_results\Division.ini"
  stIniSection = "main"
  stIniKey = "nbPredictions"
  stDefaultValue = "0"
  stVariable = "nbPredictions"
Comment: Change TO nbPredictions instead of 1 in the for loop for more positions
ForNextLoop LoopVariable=pred, StartValue=0, EndValue=1, StepValue=1
  IfThenElse Expression=VAL(nbPredictions)>0
    CodeBlock Condition=true
      Trace Expression="position "+ STR(pred)
      Get INI String
        stIniPath = "\\isiserver\u934\service_imagerie\v_kapoor\FinalONEATTraining\ONEAT_fly_test\live_results\Division.ini" Override=None OverrideVariable=IniPath
        stIniSection = "0" Override=Variable OverrideVariable=STR(pred)
        stIniKey = "x" Override=None OverrideVariable=IniKey
        stDefaultValue = "0" Override=None OverrideVariable=DefaultValue
        stVariable = "x" Override=None OverrideVariable=Variable
      Get INI String
        stIniPath = "\\isiserver\u934\service_imagerie\v_kapoor\FinalONEATTraining\ONEAT_fly_test\live_results\Division.ini" Override=None OverrideVariable=IniPath
        stIniSection = "3" Override=Variable OverrideVariable=STR(pred)
        stIniKey = "y" Override=None OverrideVariable=IniKey
        stDefaultValue = "0" Override=None OverrideVariable=DefaultValue
        stVariable = "y" Override=None OverrideVariable=Variable
      Move Stage to Relative Position
        dpX = 0 Override=Variable OverrideVariable=STR(VAL(x)*pixelsize)
        dpY = 0 Override=Variable OverrideVariable=STR(VAL(y)*pixelsize)
        dpZ = 0 Override=None OverrideVariable=Z
      Comment: MDA TO EXECUTE
      Acquire - Load Setting
        stFileName = "E:\Users\equipe_imagerie\ONEAT_data\settings\division_acq_settingst.AST"
        bLdExposure = TRUE
        bLdBinning = TRUE
        bLdRegion = TRUE
        bLdShutter = TRUE
        bLdDest = TRUE
        bLdDisplay = TRUE
        bLdSaving = TRUE
        bLdCorrection = TRUE
        bLdCorrImages = TRUE
        bLdAnnotation = TRUE
        bLdSpecial = TRUE
        bLdColor = TRUE
        bLdLiveCapture = TRUE
        bLdHardwareProcessing = TRUE
        bLdDeconvolution = TRUE
        bLdVirtualChip = FALSE
        bLdCrestVcs = FALSE
        bLdSplitView = FALSE
      Acquire
        imDest = "Division_"
      ForNextLoop LoopVariable=division_time_step, StartValue=0, EndValue=10, StepValue=1
        Acquire
          imDest = m 0 7 14 16 1 6 0 8 Untitled
      Rename Image
        imRenameImage = m 1 3 9 0 1 -1 -1 8 Untitled
        newImageName = "qsd" Override=Variable OverrideVariable="Division_"+STR(nb_div)
      Save As
        imSave = m 1 3 9 0 1 -1 -1 8 Untitled
        fSpec = "E:\Users\equipe_imagerie\ONEAT_data\divisions\test.tif"
        nParm = 0
        m_formatID = 336
      Close All
        nCloseAllOption = 1
      nb_div = nb_div+1
IfThenElse Expression=VAL(nbPredictions) > 1
  CodeBlock Condition=true
    Delete File
      stFileToDelete = "\\isiserver\u934\service_imagerie\v_kapoor\FinalONEATTraining\ONEAT_fly_test\live_results\Division.ini"
